<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>InstantiateSite</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ThisSiteSpecs</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentPosition</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Z</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisSiteSpecs</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>StartPosition</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisSiteSpecs</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length,StartPosition</Selector>
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>(Item1 &gt;= Item2) &amp;&amp; (Item1 &lt; Item3)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsInSite</Name>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>SiteLogic</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>RewardControl</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisSiteSpecs</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Reward</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisRewardControl</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>IsStopped</Name>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>CheckStop</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisRewardControl</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>OperantLogic.StopDuration</Selector>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT0.0000001S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="6" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Switch" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Annotation">
                          <Name>LockedResponse</Name>
                          <Text><![CDATA[]]></Text>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>LockedChoiceFeedback</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Unit" />
                              <Expression xsi:type="MulticastSubject">
                                <Name>ChoiceFeedback</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>SpoutAvailable</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>Operant</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisRewardControl</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>OperantLogic.IsOperant</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>WaitForLick</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisRewardControl</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>OperantLogic.TimeToCollect</Selector>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>P11DT13H46M40S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>false</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>IsStopped</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:SampleOnUpdateFrame" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisRewardControl</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>OperantLogic.ChoiceGracePeriod</Selector>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:DelaySubscription">
                                  <gl:DueTime>PT1S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>false</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>LickEvent</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:SampleOnUpdateFrame" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="20" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="12" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source2" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="20" Label="Source2" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="20" Label="Source3" />
                              <Edge From="20" To="21" Label="Source1" />
                              <Edge From="21" To="22" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>FailToCollect</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SpoutAvailable</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>Success</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="rx:Condition">
                          <Name>Pavlovian</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisRewardControl</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>OperantLogic.IsOperant</Selector>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>DetermineReward</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisRewardControl</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Probability</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RngSeed</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:CreateContinuousUniform">
                                  <p1:Lower>0</p1:Lower>
                                  <p1:Upper>1</p1:Upper>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:Sample" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="GreaterThan" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Name>CheckEdgeCase</scr:Name>
                                <scr:Expression>Item1.Item1 == 1.0 ? True : (Item1.Item1 == 0.0 ? False : Item2)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisRewardControl</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Amount</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Name>CoinFlip</scr:Name>
                                <scr:Expression>Item1 ? Item2 : 0</scr:Expression>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RewardAvailableInPatch</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Name>CapRewardAvailable</scr:Name>
                                <scr:Expression>Item1 &gt; Item2 ? Item2 : Item1</scr:Expression>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="5" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="5" To="7" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="11" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source2" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="14" Label="Source1" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="17" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>GiveReward</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="9" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="10" To="18" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="12" To="16" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="25" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="20" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source2" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source2" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="27" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisSiteSpecs</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Reward</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\IsNotNull.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>OdorControl</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Annotation">
                          <Name>OdorControl</Name>
                          <Text><![CDATA[]]></Text>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>IsInSite</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:DistinctUntilChanged" />
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="ValveState" Selector="it" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisSiteSpecs</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Odor</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Concentration" Selector="Concentration" />
                            <Property Name="Index" Selector="Index" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\GenerateOdorControl.bonsai">
                          <Concentration>1</Concentration>
                          <Index>0</Index>
                          <ValveState>true</ValveState>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>OdorControl</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="7" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisSiteSpecs</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Odor</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\IsNotNull.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisSiteSpecs</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Render.Contrast</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HasValue</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ScreenContrast</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="6" To="11" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IsInSite</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ActiveSiteEvent.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DisposeSite</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentPosition</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Z</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DisposingTreshold</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisSiteSpecs</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length,StartPosition</Selector>
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="GreaterThan" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:LastOrDefault" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisSiteSpecs</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="11" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source3" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="19" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="21" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="24" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>