WorkflowBuilder(Version=2.9.0)
Defer Logging
    Defer Behavior
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow HarpLogging
            SubscribeSubject HarpBehaviorEvents => #0
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #2
            IncludeWorkflow(Path=Extensions\HarpBehaviorGetMetadata.bonsai)
            -> PropertyMapping(DeviceMetadata) => #4
            #0, #2, #4 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=Behavior)

            SubscribeSubject StepperDriverEvents => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            IncludeWorkflow(Path=Extensions\HarpStepperDriverGetMetadata.bonsai)
            -> PropertyMapping(DeviceMetadata) => #10
            #6, #8, #10 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=StepperDriver)

            SubscribeSubject HarpOlfactometerEvents => #12
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #14
            Harp.Olfactometer.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #16
            #12, #14, #16 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=Olfactometer)

            SubscribeSubject HarpLickometerEvents => #18
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #20
            AllenNeuralDynamics.LicketySplit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #22
            #18, #20, #22 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=Lickometer)

            SubscribeSubject HarpTreadmillEvents => #24
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #26
            AllenNeuralDynamics.Treadmill.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #28
            #24, #26, #28 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=Treadmill)

            SubscribeSubject HarpSniffDetectorEvents => #30
            AllenNeuralDynamics.SniffDetector.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #32
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #34
            #30, #32, #34 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=SniffDetector) => #35
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpSniffDetector)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #38
            #35, #38 -> SubscribeWhen

            SubscribeSubject HarpWhiteRabbitEvents => #40
            AllenNeuralDynamics.WhiteRabbit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #42
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #44
            #40, #42, #44 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=ClockGenerator)

            SubscribeSubject HarpAnalogInputEvents => #46
            Harp.AnalogInput.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #48
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #50
            #46, #48, #50 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=AnalogInput) => #51
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpAnalogInput)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #54
            #51, #54 -> SubscribeWhen

            SubscribeSubject HarpEnvironmentSensorEvents => #56
            AllenNeuralDynamics.EnvironmentSensor.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #58
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #60
            #56, #58, #60 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=EnvironmentSensor) => #61
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpEnvironmentSensor)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #64
            #61, #64 -> SubscribeWhen

        GroupWorkflow HarpCommandsLogging
            SubscribeSubject HarpBehaviorCommands => #0
            SubscribeSubject HarpTimestampSource => #1
            #0, #1 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #3
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #5
            IncludeWorkflow(Path=Extensions\HarpBehaviorGetMetadata.bonsai)
            -> PropertyMapping(DeviceMetadata) => #7
            #3, #5, #7 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/Behavior)

            SubscribeSubject StepperDriverCommands => #9
            SubscribeSubject HarpTimestampSource => #10
            #9, #10 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #12
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #14
            IncludeWorkflow(Path=Extensions\HarpStepperDriverGetMetadata.bonsai)
            -> PropertyMapping(DeviceMetadata) => #16
            #12, #14, #16 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/StepperDriver)

            SubscribeSubject HarpOlfactometerCommands => #18
            SubscribeSubject HarpTimestampSource => #19
            #18, #19 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #21
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #23
            Harp.Olfactometer.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #25
            #21, #23, #25 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/Olfactometer)

            SubscribeSubject HarpLickometerCommands => #27
            SubscribeSubject HarpTimestampSource => #28
            #27, #28 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #30
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #32
            AllenNeuralDynamics.LicketySplit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #34
            #30, #32, #34 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/Lickometer)

            SubscribeSubject HarpTreadmillCommands => #36
            SubscribeSubject HarpTimestampSource => #37
            #36, #37 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #39
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #41
            AllenNeuralDynamics.Treadmill.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #43
            #39, #41, #43 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/Treadmill)

            SubscribeSubject HarpWhiteRabbitCommands => #45
            SubscribeSubject HarpTimestampSource => #46
            #45, #46 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #48
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #50
            AllenNeuralDynamics.WhiteRabbit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #52
            #48, #50, #52 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/ClockGenerator)

            SubscribeSubject HarpSniffDetectorCommands => #54
            SubscribeSubject HarpTimestampSource => #55
            #54, #55 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #57
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #59
            AllenNeuralDynamics.SniffDetector.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #61
            #57, #59, #61 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/SniffDetector) => #62
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpSniffDetector)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #65
            #62, #65 -> SubscribeWhen

            SubscribeSubject HarpAnalogInputCommands => #67
            SubscribeSubject HarpTimestampSource => #68
            #67, #68 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #70
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #72
            Harp.AnalogInput.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #74
            #70, #72, #74 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/AnalogInput) => #75
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpAnalogInput)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #78
            #75, #78 -> SubscribeWhen

            SubscribeSubject HarpEnvironmentSensorCommands => #80
            SubscribeSubject HarpTimestampSource => #81
            #80, #81 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #83
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #85
            AllenNeuralDynamics.EnvironmentSensor.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #87
            #83, #85, #87 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/EnvironmentSensor) => #88
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpEnvironmentSensor)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #91
            #88, #91 -> SubscribeWhen

        GroupWorkflow Render
            SubscribeSubject RendererSynchState
            -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #1
              Expression:
                new(
                it.FrameIndex.Value as FrameIndex,
                it.FrameTimestamp.Value as FrameTimestamp,
                it.SyncQuadValue.Value as SyncQuadValue)
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #3
            #1, #3 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=RendererSynchState, DeviceName=Renderer)

        GroupWorkflow SoftwareEvents
            SubscribeSubject SoftwareEvent
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
            #1, #3 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #5
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #10
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #12
            #10, #12 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=nil)
            -> WorkflowOutput

            SubscribeSubject UpdaterEvents
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #16
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #18
            #16, #18 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #20
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #22
            #20, #22 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #25
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #27
            #25, #27 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=UpdaterEvents, SubjectName=LoggingRootPath, Modality=nil)

            SubscribeSubject Annotations
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Annotations)
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #31
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #33
            #31, #33 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #35
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #37
            #35, #37 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #40
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #42
            #40, #42 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=Annotations, SubjectName=LoggingRootPath, Modality=nil)

            GroupWorkflow Metadata
                SubscribeSubject Repository
                -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RepositoryStatus)
                -> MulticastSubject SoftwareEvent

                SubscribeSubject RngSeedValue
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RngSeed)
                -> MulticastSubject SoftwareEvent

        GroupWorkflow OperationControl
            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector="Seconds,Value.Z")
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Position)
            -> Defer LogCsv
                WorkflowInput Source1 => #0
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #2
                #0, #2 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=CurrentPosition, DeviceName=OperationControl)
                -> WorkflowOutput

            SubscribeSubject TreadmillFriction => #4
            SubscribeSubject HarpTimestampSource => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Seconds as Seconds,
                Value as Torque)
            -> Defer LogCsv
                WorkflowInput Source1 => #0
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #2
                #0, #2 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=Torque, DeviceName=OperationControl)
                -> WorkflowOutput

            SubscribeSubject IsStopped
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Seconds as Seconds,
                Value as IsStopped)
            -> Defer LogCsv
                WorkflowInput Source1 => #0
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #2
                #0, #2 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=IsStopped, DeviceName=OperationControl)
                -> WorkflowOutput

            SubscribeSubject GlobalPatchState => #13
            SubscribeSubject HarpTimestampSource => #14
            #13, #14 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Seconds as Seconds,
                Value.PatchId as PatchId,
                Value.Amount as Amount,
                Value.Probability as Probability,
                Value.Available as Available)
            -> Defer LogCsv
                WorkflowInput Source1 => #0
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #2
                #0, #2 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=PatchState, DeviceName=OperationControl)
                -> WorkflowOutput

        Defer Logs
            StringProperty(Value=Logs)
            -> Take(Count=1)
            -> AsyncSubject DeviceName

            GroupWorkflow ConfigSchemaLogging
                SubscribeSubject SubjectSchema
                -> AindVrForagingDataSchema.Session.SerializeToJson => #1
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #3
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #5
                #1, #3, #5 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName="", LogName=session_output)

                SubscribeSubject TaskLogicSchema
                -> AindVrForagingDataSchema.TaskLogic.SerializeToJson => #8
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #10
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #12
                #8, #10, #12 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_output)

                SubscribeSubject RigSchema
                -> AindVrForagingDataSchema.Rig.SerializeToJson => #15
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #17
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #19
                #15, #17, #19 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_output)

                SubscribeSubject RawRigSchema => #21
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #23
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #25
                #21, #23, #25 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_input, Extension=json)

                SubscribeSubject RawSessionSchema => #27
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #29
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #31
                #27, #29, #31 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=session_input, Extension=json)

                SubscribeSubject RawTaskLogicSchema => #33
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #35
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #37
                #33, #35, #37 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_input, Extension=json)

            GroupWorkflow Logs
                SubscribeSubject EndExperiment
                -> StringProperty(Value=ExperimentCompleted)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=EndSession) => #2
                SubscribeSubject HarpTimestampSource => #3
                #2, #3 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped
                -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
                -> AllenNeuralDynamics.AindBehaviorServices.DataTypes.SerializeToJson => #7
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #9
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #11
                #7, #9, #11 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName="", LogName=endsession)

                SubscribeSubject RuntimeLogging
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #14
                SubscribeSubject RendererSynchState
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #16
                #14, #16 -> WithLatestFrom
                -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #18
                SubscribeSubject HarpTimestampSource
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #20
                #18, #20 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped
                -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #23
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #25
                SubscribeSubject DeviceName => #26
                StringProperty(Value=RuntimeLogging)
                -> Take(Count=1) => #28
                #26, #28 -> Zip
                -> Format(Format={0}/{1}, Selector="Item1,Item2")
                -> PropertyMapping(LoggerName) => #31
                #23, #25, #31 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=RuntimeLogging, SubjectName=LoggingRootPath, Modality=nil)

    Defer BehaviorVideos
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=BehaviorVideos)
        -> Take(Count=1)
        -> AsyncSubject Modality

        IncludeWorkflow(Path=Extensions\TriggeredCameras.bonsai)
-> WorkflowOutput
