WorkflowBuilder(Version=2.8.1)
AllenNeuralDynamics.Core.EnumerateDataSchemaInputs(FileFilter=YML, Directory=../local/Subjects)
-> PropertyMapping(Path)
-> Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AindVrForagingDataSchema.AindVrForagingSession.DeserializeFromYaml(Type=TypeMapping<AindVrForagingDataSchema.AindVrForagingSession.AindVrForagingSession>)
-> Take(Count=1)
-> AsyncSubject SubjectSchema

StringProperty(Value=rig.yml)
-> PropertyMapping(DataSchema)
-> AllenNeuralDynamics.Core.EnumerateDataSchemaInputs(FileFilter=YML, Directory=../local/Rigs)
-> PropertyMapping(Path)
-> Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AindVrForagingDataSchema.Rig.DeserializeFromYaml(Type=TypeMapping<AindVrForagingDataSchema.Rig.AindVrForagingRig>)
-> Take(Count=1)
-> AsyncSubject RigSchema

AllenNeuralDynamics.Core.EnumerateDataSchemaInputs(FileFilter=YML, Directory=../local/TaskLogic)
-> PropertyMapping(Path)
-> Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AindVrForagingDataSchema.AindVrForagingTask.DeserializeFromYaml(Type=TypeMapping<AindVrForagingDataSchema.AindVrForagingTask.TaskLogic>)
-> Take(Count=1)
-> AsyncSubject TaskLogicSchema

GroupWorkflow ProtocolValidation => #20
    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository
    -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
    -> BitwiseNot => #3
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=Metadata.Allow_dirty_repo) => #5
    #3, #5 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
      Expression: Item2 ? False : Item1
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

    SubscribeSubject RigSchema
    -> MemberSelector(Selector="FaceCamera.FrameRate,FaceCamera.Exposure")
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: ((1.0 / Item1) * 1000000) < Item2 + 1000
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> AllenNeuralDynamics.Core.ThrowException(Message="Camera frame rate and exposure settings are not compatible.")

    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=Environment_statistics.Patches)
    -> MemberSelector(Selector=Count) => #18
    SubscribeSubject TransitionMatrix
    -> MemberSelector(Selector=Rows) => #20
    #18, #20 -> Zip
    -> NotEqual
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> AllenNeuralDynamics.Core.ThrowException(Message="Number of patches does not match transition matrix size.")

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Valves.Water)
    -> MemberSelector(Selector=Calibration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it == null
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.ThrowException(Message="No water valve calibration settings found!")

    Disable SubscribeSubject TaskLogicSchema => #32
    -> Disable MemberSelector(Selector=Task_stage_settings)
    -> Disable Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.AindVrForagingTask.TaskStage>(Value="")) => #34
    #32 -> Disable MemberSelector(Selector=OperationControl.HabituationSettings)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform isNull => #36
      Expression: it == null
    #34, #36 -> Disable Zip
    -> Disable BitwiseAnd
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Disable Take(Count=1)
    -> Disable AllenNeuralDynamics.Core.ThrowException(Message='Stage is defined as "Habituation" but no settings were found')

    Disable SubscribeSubject TaskLogicSchema
    -> Disable MemberSelector(Selector=OperationControl.TaskStage)
    -> Disable Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.AindVrForagingTask.TaskStage>(Value="")) => #44
    Disable SubscribeSubject PatchStatistics
    -> Disable MemberSelector(Selector=Count)
    -> Disable LessThan(Operand=IntProperty(Value=1)) => #47
    #44, #47 -> Disable Zip
    -> Disable BitwiseAnd
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Disable Take(Count=1)
    -> Disable AllenNeuralDynamics.Core.ThrowException(Message='Stage defined as "Foraging" but not patches were found!')

    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=Operation_control.Odor_control.Use_channel_3_as_carrier)
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany SampleFlow
        SubscribeSubject StartExperiment
        -> Take(Count=1) => #1
        SubscribeSubject HarpOlfactometerEvents
        -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel3ActualFlow)
        -> MemberSelector(Selector=Value) => #4
        ExternalizedMapping(Value(DisplayName=LowFlowThreshold)) => #5
        #4, #5 -> LessThan(Operand=FloatProperty(Value=0)) => #6
        #1, #6 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> Take(Count=1)
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.ThrowException(Message="Flow on Channel3 is lower than expected.")
SubscribeSubject SubjectSchema
-> MemberSelector(Selector=Metadata.Skip_hardware_validation)
-> BitwiseNot
-> Condition => #24
    WorkflowInput Source1
    -> WorkflowOutput
#20, #24 -> SubscribeWhen

Annotation PinOut
  Text:
    | Function | HarpBehavior Pin | Notes |
    | --- | ----------- | ----------- |
    | Camera Trigger | DO0 |  |
    | Water Valve | Port0 Supply |  Use a poke breakout |
    | Lickometer | Port0 DI |  Use a poke breakout |
    | Encoder B | Port2 DIO | Use a poke breakout |
    | Encoder A | Port2 DI | Use a poke breakout |
    | Thermistor | ADC0 |  |
    | Pressure Sensor | ADC1 |  |
    | Photodiode | DI3 |  |
    | Servo Motor | DO2 |  |
    | Audio Buzzer | DO1 |  |
-> IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, StartExperimentSubjectName=StartExperiment)

SubscribeSubject HarpBehaviorEvents
-> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
-> Harp.Behavior.FilterRegister(FilterType=Include, Register=Harp.Behavior.AnalogData)
-> BehaviorSubject HarpTimestampSource

GroupWorkflow InitVariables
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AindVrForagingDataSchema.AindVrForagingTask.VirtualSite> ActiveSite
    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> SoftwareEvent
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

GroupWorkflow Config
    GroupWorkflow SessionSettings
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=Metadata.Rng_seed) => #1
        Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
        -> Bonsai.Numerics.Distributions.Sample => #4
        #1, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
          Expression: Item1.HasValue ? Item1.Value : Item2
        -> Take(Count=1)
        -> AsyncSubject RngSeedValue
        -> PropertyMapping(Seed)
        -> Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Take(Count=1)
        -> AsyncSubject RngSeed

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Graphics.Render.TextureAssetDirectory)
        -> PropertyMapping(Value)
        -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=Textures)
        -> Take(Count=1)
        -> AsyncSubject TextureBankPath

        Annotation(Text="A small value that is used to sum to the visual horizon to instantiate resources.")
        -> FloatProperty(Value=0)
        -> Take(Count=1)
        -> AsyncSubject SigmaZ

        ExternalizedMapping(Value(DisplayName=FarClipHorizon))
        -> FloatProperty(Value=1000)
        -> Take(Count=1)
        -> AsyncSubject FarClipHorizon

        Annotation(Text="The distance used to determine whether a segment should be disposed.") => #27
        ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #28
        #27, #28 -> FloatProperty(Value=20)
        -> Take(Count=1)
        -> AsyncSubject DisposingTreshold

    Annotation(Text="")
    -> GroupWorkflow Hardware
        GroupWorkflow ScreenConfiguration
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Graphics.Display)
            -> PropertyMapping(DisplayDevice(Selector=DisplayDevice), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
            -> Bonsai.Shaders.CreateWindow
              Width=1000
              Height=1000
              Title=VrForaging
              VSync=Off
              SwapSync=false
              ClearColor=Black
              ClearMask="DepthBufferBit ColorBufferBit"
              CursorVisible=false
              Location=nil
              WindowBorder=Resizable
              WindowState=Fullscreen
              DisplayDevice=Second
              TargetRenderFrequency=60
              TargetUpdateFrequency=120
              RenderState=""
              GraphicsMode
                ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
                Depth=16
                Stencil=0
                Samples=0
                AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
                Buffers=2
                Stereo=false
            -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
            -> Bonsai.Shaders.ShaderResources
              Shaders
                ShaderConfiguration=Bonsai.Shaders.Material
                  Name=ScaledTexturedModel
                  RenderState=""
                  ShaderUniforms=""
                  BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
                  FramebufferAttachments=""
                  VertexShader=BonVision:Shaders.TexturedModel.vert
                  FragmentShader=Shaders\ScaledTexturedModel.frag
                ShaderConfiguration=Bonsai.Shaders.Material
                  Name=AdjustQuadTexture
                  RenderState=""
                  ShaderUniforms=""
                  BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
                  FramebufferAttachments=""
                  VertexShader=BonVision:Shaders.Quad.vert
                  FragmentShader=Shaders\AdjustQuadTexture.frag
            -> Bonsai.Resources.LoadResources
            -> WorkflowOutput

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Graphics.Render.MonitorCalibrationDirectory)
            -> PropertyMapping(Directory)
            -> IncludeWorkflow(Path=Extensions\LoadAllScreensCalibration.bonsai, Directory=Calibration\Monitors)
            -> Take(Count=1)
            -> AsyncSubject ScreenCalibration

            GroupWorkflow RenderLoop
                Bonsai.Shaders.RenderFrame
                -> PublishSubject RenderFrame => #1
                SubscribeSubject FarClipHorizon
                -> PropertyMapping(FarClip) => #3
                #1, #3 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0)) => #4
                -> MemberSelector(Selector=ViewMatrix)
                -> Bonsai.Shaders.RotateY(Order=Append, Angle=-3.14159274) => #6
                #6, #4 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1 as ViewMatrix,
                    Item2.ProjectionMatrix as ProjectionMatrix,
                    Item2.Light as Light)
                -> PublishSubject Draw3DStim
                -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #10
                SubscribeSubject ScreenCalibration
                -> MemberSelector(Selector=Right)
                -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #13
                #10, #13 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=-60.0001403060998, Z=0), Translation(X=20, Y=0, Z=-8))
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #15
                SubscribeSubject ScreenContrast
                -> PropertyMapping(Contrast) => #17
                #15, #17 -> IncludeWorkflow
                  Path=Extensions\AdjustQuadTexture.bonsai
                  ExtentX=1
                  ExtentY=1
                  LocationX=0
                  LocationY=0
                  Layer=1
                  Angle=0
                  ScaleX=1
                  ScaleY=1
                  ShiftX=0
                  ShiftY=0
                  Contrast=1
                  Brightness=0
                -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666667, Y=0, Width=0.333333, Height=1) => #19
                SubscribeSubject ScreenCalibration
                -> MemberSelector(Selector=Center)
                -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #22
                #10, #22 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-12.7))
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #24
                SubscribeSubject ScreenContrast
                -> PropertyMapping(Contrast) => #26
                #24, #26 -> IncludeWorkflow
                  Path=Extensions\AdjustQuadTexture.bonsai
                  ExtentX=1
                  ExtentY=1
                  LocationX=0
                  LocationY=0
                  Layer=1
                  Angle=0
                  ScaleX=1
                  ScaleY=1
                  ShiftX=0
                  ShiftY=0
                  Contrast=1
                  Brightness=0
                -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333333343, Y=0, Width=0.333333343, Height=1) => #28
                SubscribeSubject ScreenCalibration
                -> MemberSelector(Selector=Left)
                -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #31
                #10, #31 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=60.0001403060998, Z=0), Translation(X=-20, Y=0, Z=-8))
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #33
                SubscribeSubject ScreenContrast
                -> PropertyMapping(Contrast) => #35
                #33, #35 -> IncludeWorkflow
                  Path=Extensions\AdjustQuadTexture.bonsai
                  ExtentX=1
                  ExtentY=1
                  LocationX=0
                  LocationY=0
                  Layer=1
                  Angle=0
                  ScaleX=1
                  ScaleY=1
                  ShiftX=0
                  ShiftY=0
                  Contrast=1
                  Brightness=0
                -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333333343, Height=1) => #37
                #19, #28, #37 -> Zip
                -> PublishSubject PostDrawing

                FloatProperty(Value=1)
                -> Take(Count=1)
                -> BehaviorSubject ScreenContrast

                Annotation(Text="")
                -> GroupWorkflow SynchQuad
                    BooleanProperty(Value=false)
                    -> Take(Count=1) => #1
                    Defer RandomInterval
                        SubscribeSubject RngSeed => #0
                        ExternalizedMapping(Lower, Upper) => #1
                        #0, #1 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=6)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime)
                        -> Bonsai.Shaders.Timer(DueTime=PT0S)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Repeat
                    -> ElementIndex
                    -> MemberSelector(Selector=Index)
                    -> Mod(Operand=IntProperty(Value=2))
                    -> Equal(Operand=IntProperty(Value=1)) => #7
                    #1, #7 -> Concat
                    -> BehaviorSubject SynchQuadColor

                    SubscribeSubject PostDrawing
                    -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
                    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=0, Right=3, Bottom=0, Top=1) => #12
                    SubscribeSubject RenderFrame
                    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                    -> Accumulate
                    -> ElementIndex => #16
                    #12, #16 -> Zip => #17
                    SubscribeSubject SynchQuadColor
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #19
                      Expression: it ? 1.0 : 0.0
                    #17, #19 -> WithLatestFrom => #20
                    -> InputMapping(SynchQuadValue(Selector=Item2), FrameIndex(Selector=Item1.Item2.Index), FrameTimestamp(Selector=Item1.Item2.Value))
                    -> SelectMany CreateRenderSynchState
                        ExternalizedMapping(SynchQuadValue, FrameIndex, FrameTimestamp)
                        -> AllenNeuralDynamics.Core.Logging.RenderSynchState
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> BehaviorSubject RendererSynchState => #23
                    #20 -> MemberSelector(Selector=Item1.Item1) => #24
                    #23, #24 -> Zip => #25
                    -> InputMapping(Selector=Item2, ColorG(Selector=Item1.SynchQuadValue), ColorR(Selector=Item1.SynchQuadValue), ColorB(Selector=Item1.SynchQuadValue))
                    -> IncludeWorkflow => #27
                      Path=BonVision:Primitives.DrawQuad.bonsai
                      ExtentX=0.045
                      ExtentY=0.08
                      LocationX=2.925
                      LocationY=0.03
                      Layer=10
                      Angle=0
                      ColorR=1
                      ColorG=1
                      ColorB=1
                      ColorA=1
                    #25 -> MemberSelector(Selector=Item1.FrameIndex)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform Mod2 => #29
                      Expression: (it % 2).Value
                    #25 -> MemberSelector(Selector=Item2) => #30
                    #29, #30 -> Zip
                    -> InputMapping(Selector=Item2, ColorG(Selector=Item1), ColorR(Selector=Item1), ColorB(Selector=Item1))
                    -> IncludeWorkflow => #33
                      Path=BonVision:Primitives.DrawQuad.bonsai
                      ExtentX=0.045
                      ExtentY=0.045
                      LocationX=2.925
                      LocationY=0.15
                      Layer=10
                      Angle=0
                      ColorR=1
                      ColorG=1
                      ColorB=1
                      ColorA=1
                    #27, #33 -> Zip

            GroupWorkflow LoadTextureBank
                SubscribeSubject TextureBankPath
                -> PropertyMapping(Path)
                -> Bonsai.IO.GetFiles(Path=Textures, SearchPattern=*.jpg, SearchOption=TopDirectoryOnly)
                -> Merge
                -> CreateObservable LoadTexture
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject TexturePath

                    SubscribeSubject TexturePath
                    -> Bonsai.IO.GetFileNameWithoutExtension => #4
                    SubscribeSubject TexturePath
                    -> PropertyMapping(FileName)
                    -> Bonsai.Shaders.LoadImage => #7
                      Width=nil
                      Height=nil
                      InternalFormat=Rgba
                      WrapS=Repeat
                      WrapT=Repeat
                      MinFilter=Linear
                      MagFilter=Linear
                      FileName=Textures\wall_4.jpg
                      ColorType=Unchanged
                      FlipMode=Vertical
                    #4, #7 -> Zip
                    -> WorkflowOutput
                -> Merge
                -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
                -> AsyncSubject TextureBank
        -> DelaySubscription(DueTime=PT1S)

        GroupWorkflow HarpDevices
            Annotation PinOut(Text="")
            -> IncludeWorkflow(Path=Extensions\HarpOlfactometerDevice.bonsai, StartExperimentSubjectName=StartExperiment)

            Annotation PinOut(Text="")
            -> IncludeWorkflow(Path=Extensions\HarpLickometerDevice.bonsai, StartExperimentSubjectName=StartExperiment)

            Annotation PinOut(Text="")
            -> IncludeWorkflow(Path=Extensions\HarpClockSynchronizerDevice.bonsai, StartExperimentSubjectName=StartExperiment)

            IncludeWorkflow(Path=Extensions\HarpAnalogInputDevice.bonsai, StartExperimentSubjectName=StartExperiment) => #6
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpAnalogInput)
            -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #9
            #6, #9 -> SubscribeWhen

        GroupWorkflow Cameras
            GroupWorkflow MainCamera
                SubscribeSubject RigSchema
                -> MemberSelector(Selector=FaceCamera.FrameRate)
                -> Take(Count=1)
                -> AsyncSubject CameraFrameRate

                SubscribeSubject CameraFrameRate
                -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
                -> MulticastSubject HarpBehaviorCommands

                SubscribeSubject HarpBehaviorEvents
                -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #9
                -> MemberSelector(Selector=Value)
                -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
                -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
                -> Condition => #13
                    WorkflowInput Source1
                    -> WorkflowOutput
                #13, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.Seconds)
                -> PublishSubject FrameEvent

                SubscribeSubject RigSchema
                -> MemberSelector(Selector=FaceCamera)
                -> PropertyMapping
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #20
                SubscribeSubject FrameEvent => #21
                #20, #21 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> PublishSubject FaceCameraFrameEvent

                SubscribeSubject RigSchema
                -> MemberSelector(Selector=TopBodyCamera)
                -> PropertyMapping
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #28
                SubscribeSubject FrameEvent => #29
                #28, #29 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #31
                SubscribeSubject RigSchema
                -> MemberSelector(Selector=TopBodyCamera)
                -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #34
                #31, #34 -> SubscribeWhen
                -> PublishSubject TopBodyCameraFrameEvent

                SubscribeSubject RigSchema
                -> MemberSelector(Selector=SideBodyCamera)
                -> PropertyMapping
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #40
                SubscribeSubject FrameEvent => #41
                #40, #41 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #43
                SubscribeSubject RigSchema
                -> MemberSelector(Selector=SideBodyCamera)
                -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #46
                #43, #46 -> SubscribeWhen
                -> PublishSubject SideBodyCameraFrameEvent

            GroupWorkflow AuxiliaryCameras
                SubscribeSubject RigSchema
                -> MemberSelector(Selector=AuxiliaryCamera0.Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #3
                SubscribeSubject HarpTimestampSource => #4
                #3, #4 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #6
                SubscribeSubject RigSchema
                -> MemberSelector(Selector=AuxiliaryCamera0)
                -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #9
                #6, #9 -> SubscribeWhen
                -> PublishSubject AuxiliaryCamera0

                SubscribeSubject RigSchema
                -> MemberSelector(Selector=AuxiliaryCamera1.Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=1, CaptureProperties="") => #15
                SubscribeSubject HarpTimestampSource => #16
                #15, #16 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #18
                SubscribeSubject RigSchema
                -> MemberSelector(Selector=AuxiliaryCamera1)
                -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #21
                #18, #21 -> SubscribeWhen
                -> PublishSubject AuxiliaryCamera1

    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=Metadata)
    -> PropertyMapping(Subject(Selector=Subject), RootFolder(Selector=Root_path))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai, RootFolder=C:\data\, Subject=672102, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

Annotation Defer(Text="Defer just to keep the variable polution a bit more contained")
-> Defer Logging => #35
    GroupWorkflow HarpLogging
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.FilterVisibility
        -> Harp.Behavior.GroupByRegister => #2
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=Behavior.harp, Extension=bin)
        -> PropertyMapping(FileName) => #4
        #2, #4 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)
        -> WorkflowOutput

        SubscribeSubject HarpOlfactometerEvents
        -> Harp.Olfactometer.FilterVisibility
        -> Harp.Olfactometer.GroupByRegister => #9
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=Olfactometer.harp, Extension=bin)
        -> PropertyMapping(FileName) => #11
        #9, #11 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplitLickDetector.GroupByRegister => #14
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=Lickometer.harp, Extension=bin)
        -> PropertyMapping(FileName) => #16
        #14, #16 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        SubscribeSubject HarpClockGenEvents
        -> Harp.TimestampGeneratorGen3.GroupByRegister => #19
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=ClockGenerator.harp, Extension=bin)
        -> PropertyMapping(FileName) => #21
        #19, #21 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        SubscribeSubject HarpAnalogInputEvents
        -> Harp.AnalogInput.FilterVisibility
        -> Harp.AnalogInput.GroupByRegister => #25
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=AnalogInput.harp, Extension=bin)
        -> PropertyMapping(FileName) => #27
        #25, #27 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil) => #28
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai) => #31
        #28, #31 -> SubscribeWhen

    GroupWorkflow Camera
        IncludeWorkflow FaceCameraFrameEvent(Path=Extensions\CameraLogger.bonsai, LogName=FaceCamera)
        IncludeWorkflow TopBodyCameraFrameEvent(Path=Extensions\CameraLogger.bonsai, LogName=TopBodyCamera)
        IncludeWorkflow SideBodyCameraFrameEvent(Path=Extensions\CameraLogger.bonsai, LogName=SideBodyCamera)

    GroupWorkflow ConfigSchemaLogging
        SubscribeSubject SubjectSchema
        -> GroupWorkflow ModifySchema
            WorkflowInput Source1
            -> AindVrForagingDataSchema.AindVrForagingSession.SerializeToJson
            -> AindVrForagingDataSchema.AindVrForagingSession.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.AindVrForagingSession.AindVrForagingSession>) => #2
            SubscribeSubject Repository
            -> MemberSelector(Selector=Head.Tip.Sha) => #4
            #2, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionSink AddHash
              Expression: it.Item1.Metadata.set_commit_hash(it.Item2)
            -> MemberSelector(Selector=Item1) => #7
            SubscribeSubject RngSeedValue => #8
            #7, #8 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionSink AddRngSeedValue
              Expression: it.Item1.Metadata.set_rng_seed(it.Item2)
            -> MemberSelector(Selector=Item1) => #11
            SubscribeSubject UserComments
            -> Take(Count=1) => #13
            #11, #13 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionSink AddNotes
              Expression: it.Item1.Metadata.set_Notes(it.Item2)
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> AindVrForagingDataSchema.AindVrForagingSession.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=Subject, DeviceName=Config, Extension=json)

        SubscribeSubject TaskLogicSchema
        -> AindVrForagingDataSchema.AindVrForagingTask.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=TaskLogic, DeviceName=Config, Extension=json)

        SubscribeSubject RigSchema
        -> AindVrForagingDataSchema.Rig.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=Rig, DeviceName=Config, Extension=json)

    GroupWorkflow Render
        SubscribeSubject RendererSynchState
        -> Bonsai.Scripting.Expressions.ExpressionTransform Label
          Expression:
            new(
            it.FrameIndex.Value as FrameIndex,
            it.FrameTimestamp.Value as FrameTimestamp,
            it.SynchQuadValue.Value as SynchQuadValue)
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.Core:LogCsv.bonsai
          LogName=RendererSynchState
          DeviceName=Renderer
          Extension=csv
          OmitHeader=false
          Delimiter=nil
          SubjectName=LoggingRootPath

    GroupWorkflow SoftwareEvents
        SubscribeSubject SoftwareEvent
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
        SubscribeSubject RendererSynchState
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
        #1, #3 -> WithLatestFrom
        -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #5
        SubscribeSubject HarpTimestampSource
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #7
        #5, #7 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath)
        -> WorkflowOutput

        SubscribeSubject UpdaterEvents
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #14
        SubscribeSubject RendererSynchState
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #16
        #14, #16 -> WithLatestFrom
        -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #18
        SubscribeSubject HarpTimestampSource
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #20
        #18, #20 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=UpdaterEvents, SubjectName=LoggingRootPath)

        SubscribeSubject Annotations
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=Annotations)
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #27
        SubscribeSubject RendererSynchState
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #29
        #27, #29 -> WithLatestFrom
        -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #31
        SubscribeSubject HarpTimestampSource
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #33
        #31, #33 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=Annotations, SubjectName=LoggingRootPath)

        SubscribeSubject UserComments
        -> MulticastSubject Annotations

    GroupWorkflow OperationControl
        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector="Seconds,Value.Z")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as Seconds,
            Item2 as Position)
        -> Defer LogCsv
            WorkflowInput Source1
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogCsv.bonsai
              LogName=CurrentPosition
              DeviceName=OperationControl
              Extension=csv
              OmitHeader=false
              Delimiter=nil
              SubjectName=LoggingRootPath
            -> WorkflowOutput

        SubscribeSubject IsStopped
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Seconds as Seconds,
            Value as IsStopped)
        -> Defer LogCsv
            WorkflowInput Source1
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogCsv.bonsai
              LogName=IsStopped
              DeviceName=OperationControl
              Extension=csv
              OmitHeader=false
              Delimiter=nil
              SubjectName=LoggingRootPath
            -> WorkflowOutput

    GroupWorkflow Logs
        SubscribeSubject EndExperiment
        -> StringProperty(Value=ExperimentCompleted)
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
        SubscribeSubject HarpTimestampSource => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> AllenNeuralDynamics.Core.Logging.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=EndSession, DeviceName=config, Extension=json)
SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #37
#35, #37 -> TakeUntil => #38
SubscribeSubject StartLogging => #39
#38, #39 -> SubscribeWhen

Annotation(Text="")
-> GroupWorkflow OperationControl
    GroupWorkflow PositionControl => #0
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=Operation_control)
        -> MemberSelector(Selector=Position_control.Velocity_threshold)
        -> BehaviorSubject StopVelocityThreshold

        SubscribeSubject StopVelocityThreshold
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=StopVelocityTreshold)
        -> MulticastSubject SoftwareEvent

        GroupWorkflow InitialPosition => #7
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=Operation_control)
            -> MemberSelector(Selector=Position_control.Initial_position)
            -> MemberSelector(Selector=Z) => #3
            -> DoubleProperty(Value=0) => #4
            #3, #4 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject EncoderData => #8
        #7, #8 -> Concat => #9
        -> MemberSelector(Selector=Value)
        -> Accumulate
        -> InputMapping(Z(Selector=it)) => #12
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=Operation_control.Position_control.Initial_position)
        -> PropertyMapping(X(Selector=X), Y(Selector=Y)) => #15
        #12, #15 -> Bonsai.Shaders.CreateVector3(X=0, Y=4, Z=-1) => #16
        #9 -> MemberSelector(Selector=Seconds) => #17
        #16, #17 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> BehaviorSubject CurrentPosition

        SubscribeSubject EncoderData => #22
        -> MemberSelector(Selector=Value) => #23
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=Operation_control)
        -> MemberSelector(Selector=Position_control.Frequency_filter_cutoff)
        -> PropertyMapping(Cutoff1) => #27
        #23, #27 -> Bonsai.Dsp.FrequencyFilter(SampleRate=1000, Cutoff1=5, Cutoff2=0, KernelLength=60, FilterType=LowPass)
        -> Bonsai.Scripting.Expressions.ExpressionTransform cm/second
          Expression: it * 1000
        -> PublishSubject CurrentVelocity => #30
        SubscribeSubject StopVelocityThreshold
        -> PropertyMapping(Value) => #32
        #30, #32 -> LessThan(Operand=DoubleProperty(Value=10))
        -> DistinctUntilChanged => #34
        #22 -> MemberSelector(Selector=Seconds) => #35
        #34, #35 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> BehaviorSubject IsStopped

        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector=Value) => #41
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-100000)
        -> Take(Count=1) => #43
        #41, #43 -> Scan => #44
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Accumulation.Z > Value.Z ? Accumulation : Value
            -> WorkflowOutput
        Annotation "Max(Z)"(Text="") => #45
        #44, #45 -> BehaviorSubject MaxPosition
    SubscribeSubject StartExperiment => #1
    #0, #1 -> SubscribeWhen

    GroupWorkflow PatchStatistics => #3
        BehaviorSubject<System.Single> RewardAvailableInPatch
        BehaviorSubject<AindVrForagingDataSchema.AindVrForagingTask.PatchStatistics> ActivePatch

        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=Environment_statistics.Transition_matrix)
        -> MemberSelector(Selector=Data)
        -> FormatTransitionMatrix(NormalizeRows=true)
        -> BehaviorSubject TransitionMatrix

        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=Environment_statistics.Patches)
        -> Merge
        -> ToDictionary(KeySelector=State_index, ElementSelector=it)
        -> Take(Count=1)
        -> AsyncSubject PatchStatistics

        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=Environment_statistics.First_state) => #14
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #16
        #14 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany RandomStart => #18
            SubscribeSubject RngSeed => #0
            SubscribeSubject TransitionMatrix
            -> MemberSelector(Selector=Rows)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Upper) => #4
            #0, #4 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1)
            -> WorkflowOutput
        #16, #18 -> Merge
        -> Take(Count=1)
        -> BehaviorSubject ActiveStateIndex

        SubscribeSubject ActiveStateIndex
        -> CreateObservable UpdateState
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject PatchIndex

            SubscribeSubject PatchStatistics => #3
            SubscribeSubject PatchIndex
            -> PropertyMapping(Value) => #5
            #3, #5 -> Index(Operand=IntProperty(Value=0))
            -> Take(Count=1)
            -> AsyncSubject ThisPatch

            SubscribeSubject ThisPatch
            -> MulticastSubject ActivePatch

            SubscribeSubject ThisPatch
            -> MemberSelector(Selector=Reward_specification.Amount)
            -> MulticastSubject RewardAvailableInPatch

            SubscribeSubject GiveReward
            -> Skip(Count=1)
            -> SelectMany --RewardsAvailable
                WorkflowInput Source1 => #0
                SubscribeSubject RewardAvailableInPatch => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform Reward--
                  Expression: Item2 - Item1
                -> Take(Count=1)
                -> MulticastSubject RewardAvailableInPatch
                -> WorkflowOutput
        -> Switch

        SubscribeSubject ActivePatch
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ActivePatch)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject RewardAvailableInPatch
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=RewardAvailableInPatch)
        -> MulticastSubject SoftwareEvent
    SubscribeSubject StartExperiment => #4
    #3, #4 -> SubscribeWhen

    GroupWorkflow OdorControl
        GroupWorkflow OlfactometerInitialConfiguration
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1) => #1
            GroupWorkflow Channel3Setting
                SubscribeSubject TaskLogicSchema
                -> MemberSelector(Selector=Operation_control.Odor_control.Use_channel_3_as_carrier) => #1
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate1000) => #3
                #1 -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate100) => #6
                #3, #6 -> Merge
                -> WorkflowOutput
            -> PropertyMapping(Channel3Range) => #3
            #1, #3 -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel3RangePayload(Channel3Range=FlowRate1000))
            -> MulticastSubject HarpOlfactometerCommands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableEventsPayload(EnableEvents="Flowmeter DI0Trigger ChannelActualFlow"))
            -> MulticastSubject HarpOlfactometerCommands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled))
            -> MulticastSubject HarpOlfactometerCommands
            -> WorkflowOutput

        GroupWorkflow ArmOdor
            BehaviorSubject<AindVrForagingDataSchema.AindVrForagingTask.OdorSpecification> ArmOdor

            SubscribeSubject ArmOdor
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ArmOdor)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject ArmOdor => #4
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=Operation_control.Odor_control.Use_channel_3_as_carrier)
            -> PropertyMapping(Channel3AsCarrier) => #7
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=Operation_control.Odor_control.Target_odor_flow)
            -> PropertyMapping(TargetOdorFlow) => #10
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=Operation_control.Odor_control.Target_total_flow)
            -> PropertyMapping(TotalFlow) => #13
            #4, #7, #10, #13 -> CreateOdorMix => #14
              channel3AsCarrier=false
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=0
              Channel3AsCarrier=false
              TargetOdorFlow=100
              TotalFlow=1000
            -> MemberSelector(Selector=ChannelsTargetFlow) => #15
            #14 -> MemberSelector(Selector=OdorValveState) => #16
            #15, #16 -> Merge
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow EndValveControl
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1)
            -> BooleanProperty(Value=false)
            -> BehaviorSubject OdorEndValveState

            SubscribeSubject OdorEndValveState => #4
            -> Condition OdorPath
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=EndValve0) => #6
            #4 -> BitwiseNot
            -> Condition CarrierPath
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=None) => #9
            #6, #9 -> Merge
            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.EndValveState)
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow WaitForMaxOpenTime
            SubscribeSubject OdorEndValveState => #0
            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=Operation_control.Odor_control.Valve_max_open_time)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(MaxOpenTime) => #4
            #0, #4 -> IncludeWorkflow(Path=Extensions\WaitForMaxOpenTime.bonsai, MaxOpenTime=PT5S)
            -> MulticastSubject OdorEndValveState
            -> WorkflowOutput

    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> BehaviorSubject GiveReward

        SubscribeSubject GiveReward
        -> Condition GreaterThan0 => #5
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Valves.Water)
        -> MemberSelector(Selector=Calibration) => #8
        #5, #8 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime
          Expression: Item1 * Item2.Slope + Item2.Intercept
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

        SubscribeSubject GiveReward => #18
        DoubleProperty(Value=0) => #19
        #18, #19 -> Merge
        -> Accumulate
        -> BehaviorSubject SessionAccumulatedReward

        SubscribeSubject GiveReward
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=GiveReward)
        -> MulticastSubject SoftwareEvent

    GroupWorkflow MovableSpoutControl
        GroupWorkflow ServoMotor
            SubscribeSubject HarpBehaviorHeartBeat
            -> Take(Count=1)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateDisableServosPayload(DisableServos=ServoOutput2))
            -> MulticastSubject HarpBehaviorCommands => #3
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MovableSpout)
            -> MemberSelector(Selector=Period)
            -> PropertyMapping(Value) => #7
            #3, #7 -> IntProperty(Value=20000)
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.ServoMotor2Period)
            -> MulticastSubject HarpBehaviorCommands
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableServosPayload(EnableServos=ServoOutput2))
            -> MulticastSubject HarpBehaviorCommands => #12
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MovableSpout)
            -> MemberSelector(Selector=PulseDurationUsDefault)
            -> PropertyMapping(Value) => #16
            #12, #16 -> IntProperty(Value=2000)
            -> MulticastSubject ServoPosition

            BehaviorSubject<System.Int32> ServoPosition => #19
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MovableSpout) => #21
            #19, #21 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform Clamp => #23
              Expression: Item1 < Item2.PulseDurationUsMin ? Item2.PulseDurationUsMin : (Item1 > Item2.PulseDurationUsMax ? Item2.PulseDurationUsMax : Item1)
            Annotation 1000:2000(Text="") => #24
            #23, #24 -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.ServoMotor2Pulse)
            -> MulticastSubject HarpBehaviorCommands => #26
            SubscribeSubject HarpBehaviorHeartBeat => #27
            #26, #27 -> SubscribeWhen

        Annotation(Text="Start with the spout at max distance")
        -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> BehaviorSubject SpoutAvailable

        SubscribeSubject SpoutAvailable => #5
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=MovableSpout) => #7
        #5, #7 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: Item1 ? Item2.PulseDurationUsMax : Item2.PulseDurationUsMin
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=Operation_control.Movable_spout_control)
        -> MemberSelector(Selector=Enabled) => #12
        #9, #12 -> WithLatestFrom
        -> Condition IsEnabled
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject ServoPosition
        -> WorkflowOutput

        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=Operation_control.Movable_spout_control)
        -> MemberSelector(Selector=Enabled)
        -> BitwiseNot
        -> MulticastSubject SpoutAvailable => #22
        SubscribeSubject StartExperiment => #23
        #22, #23 -> SubscribeWhen

        SubscribeSubject GiveReward
        -> BooleanProperty(Value=false) => #26
        SubscribeSubject SpoutAvailable
        -> Condition Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #29
        #26, #29 -> Merge
        -> CreateObservable DelayWithdraw
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject State

            SubscribeSubject TaskLogicSchema
            -> MemberSelector(Selector=Operation_control.Movable_spout_control)
            -> MemberSelector(Selector=Time_to_collect_after_reward)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromSeconds
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0S) => #8
            SubscribeSubject State => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Switch
        -> Condition IsWithdraw?
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> MulticastSubject SpoutAvailable => #34
        SubscribeSubject StartExperiment => #35
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=Operation_control.Movable_spout_control)
        -> MemberSelector(Selector=Enabled)
        -> Condition => #39
            WorkflowInput Source1
            -> WorkflowOutput
        Annotation "Enabled and Start"(Text="") => #40
        #35, #39, #40 -> Zip => #41
        #34, #41 -> SubscribeWhen

    GroupWorkflow FeedbackControl
        BehaviorSubject<System.Reactive.Unit> ChoiceFeedback

        SubscribeSubject ChoiceFeedback
        -> Unit
        -> MulticastSubject AudioTrigger
        -> WorkflowOutput

        SubscribeSubject ChoiceFeedback
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ChoiceFeedback)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject SpoutAvailable

    GroupWorkflow Lickometer
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplitLickDetector.Parse(Register=AllenNeuralDynamics.LicketySplitLickDetector.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplitLickDetector.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged => #5
        #5, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplitLickDetector.Parse(Register=AllenNeuralDynamics.LicketySplitLickDetector.Channel0UntriggerThreshold)
        -> BehaviorSubject LickometerUntriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplitLickDetector.Parse(Register=AllenNeuralDynamics.LicketySplitLickDetector.Channel0TriggerThreshold)
        -> BehaviorSubject LickometerTriggerThreshold

        BehaviorSubject<System.Boolean> IncrementLickometerTrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerTriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplitLickDetector.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplitLickDetector.Channel0TriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerUntrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerUntriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplitLickDetector.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplitLickDetector.Channel0UntriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
        -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow Thermistor/Pressure
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> PublishSubject AnalogData

        SubscribeSubject AnalogData
        -> MemberSelector(Selector="Value.AnalogInput0,Seconds")
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject ThermistorData

        SubscribeSubject AnalogData
        -> MemberSelector(Selector="Value.AnalogInput1,Seconds")
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject PressureSensorData

    GroupWorkflow WheelEncoder
        SubscribeSubject AnalogData
        -> MemberSelector(Selector="Value.Encoder,Seconds") => #1
        -> MemberSelector(Selector=Item1) => #2
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Treadmill.WheelDiameter)
        -> Bonsai.Scripting.Expressions.ExpressionTransform Perimeter => #5
          Expression: it * Math.Pi
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Treadmill.PulsesPerRevolution) => #7
        #5, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform CentimetersPerTick => #9
          Expression: Item1 / Item2
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Treadmill.InvertDirection) => #11
        #9, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item2 ? -1.0 * Item1 : Item1
        -> PropertyMapping(RangeMax) => #14
        #2, #14 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=-0.005752427954571154, RescaleType=Linear) => #15
        #1 -> MemberSelector(Selector=Item2) => #16
        #15, #16 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject EncoderData

        SubscribeSubject HarpBehaviorHeartBeat => #20
        Annotation "Set displacement mode"(Text=https://github.com/harp-tech/device.behavior/pull/12) => #21
        #20, #21 -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=83, PayloadType=U8, Value=1))
        -> MulticastSubject HarpBehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2))
        -> Take(Count=1)
        -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow AudioControl
        BehaviorSubject<System.Double> AudioDuration
        -> Multiply(Operand=IntProperty(Value=1000))
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioFrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO1))
        -> MulticastSubject HarpBehaviorCommands

        GroupWorkflow InitialSettings => #10
            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO1Payload(PwmDutyCycleDO1=50))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Speaker)
            -> MemberSelector(Selector=PwmDefaultPulseDuration)
            -> MulticastSubject AudioDuration

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Speaker)
            -> MemberSelector(Selector=PwmFrequency)
            -> MulticastSubject AudioFrequency
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

Annotation(Text="")
-> GroupWorkflow VariableUpdaters
    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=Updaters)
    -> Take(Count=1)
    -> AsyncSubject VariableUpdaters

    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> UpdaterEvents

    SubscribeSubject GiveReward
    -> BooleanProperty(Value=true)
    -> IncludeWorkflow(Path=Extensions\UpdateVariable.bonsai, UpdaterKey=StopDurationOffset, DefaultValue=0)
    -> BehaviorSubject StopDurationOffset
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=UpdaterStopDurationOffset)
    -> MulticastSubject UpdaterEvents

    SubscribeSubject GiveReward
    -> BooleanProperty(Value=false) => #12
    SubscribeSubject StopVelocityThreshold
    -> PropertyMapping(DefaultValue) => #14
    #12, #14 -> IncludeWorkflow(Path=Extensions\UpdateVariable.bonsai, UpdaterKey=StopVelocityThreshold, DefaultValue=0)
    -> MulticastSubject StopVelocityThreshold
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=UpdaterStopVelocityThreshold)
    -> MulticastSubject UpdaterEvents

    SubscribeSubject GiveReward
    -> BooleanProperty(Value=true)
    -> IncludeWorkflow(Path=Extensions\UpdateVariable.bonsai, UpdaterKey=RewardDelayOffset, DefaultValue=0)
    -> BehaviorSubject RewardDelayOffset
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=UpdaterRewardDelayOffset)
    -> MulticastSubject UpdaterEvents

GroupWorkflow TaskLogic => #45
    Annotation(Text="")
    -> GroupWorkflow ProceduralGeneration
        GroupWorkflow CorridorDrawing
            ExternalizedMapping(Value(DisplayName=CorridorLength))
            -> FloatProperty(Value=120)
            -> Take(Count=1)
            -> AsyncSubject VisualCorridorLength

            ExternalizedMapping(Value(DisplayName=CorridorWidth))
            -> FloatProperty(Value=40)
            -> Take(Count=1)
            -> AsyncSubject CorridorWidth

            ExternalizedMapping(Value(DisplayName=CorridorHeight))
            -> FloatProperty(Value=30)
            -> Take(Count=1)
            -> AsyncSubject CorridorHeight

            GroupWorkflow DefineTextures
                AindVrForagingDataSchema.AindVrForagingTask.TextureSize(X=40, Y=40)
                -> PropertyMapping(TextureSize)
                -> AindVrForagingDataSchema.AindVrForagingTask.Floor(Name=Floor)
                -> PropertyMapping(Floor) => #3
                AindVrForagingDataSchema.AindVrForagingTask.TextureSize(X=40, Y=40)
                -> PropertyMapping(TextureSize)
                -> AindVrForagingDataSchema.AindVrForagingTask.Floor(Name=RightWall)
                -> PropertyMapping(RightWall) => #7
                AindVrForagingDataSchema.AindVrForagingTask.TextureSize(X=40, Y=40)
                -> PropertyMapping(TextureSize)
                -> AindVrForagingDataSchema.AindVrForagingTask.Floor(Name=LeftWall)
                -> PropertyMapping(LeftWall) => #11
                AindVrForagingDataSchema.AindVrForagingTask.TextureSize(X=40, Y=40)
                -> PropertyMapping(TextureSize)
                -> AindVrForagingDataSchema.AindVrForagingTask.Floor(Name=Ceiling)
                -> PropertyMapping(Ceiling) => #15
                #3, #7, #11, #15 -> AindVrForagingDataSchema.AindVrForagingTask.Textures
                -> WorkflowOutput
            -> Take(Count=1)
            -> AsyncSubject TextureDefinition

            Defer Initialize => #15
                SubscribeSubject TaskLogicSchema
                -> MemberSelector(Selector=OperationControl.PositionControl.InitialPosition)
                -> MemberSelector(Selector=Z)
                -> Take(Count=1)
                -> AsyncSubject InitPosition

                SubscribeSubject FarClipHorizon => #5
                SubscribeSubject InitPosition => #6
                #5, #6 -> Zip
                -> Subtract => #8
                SubscribeSubject VisualCorridorLength
                -> PropertyMapping(Value) => #10
                #8, #10 -> Divide(Operand=FloatProperty(Value=120))
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Math.Ceiling(it)
                -> Take(Count=1)
                -> SelectMany Range
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject Count

                    SubscribeSubject InitPosition
                    -> Take(Count=1)
                    -> PropertyMapping(Start) => #5
                    SubscribeSubject Count
                    -> PropertyMapping(Count) => #7
                    #5, #7 -> Range(Start=-1, Count=9)
                    -> WorkflowOutput
                -> InputMapping(Value(Selector=it))
                -> DoubleProperty(Value=7)
                -> WorkflowOutput
            GroupWorkflow Update => #16
                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value) => #1
                SubscribeSubject MaxPosition => #2
                #1, #2 -> CombineLatest
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector="Item1.Z,Item2.Z")
                    -> GreaterThanOrEqual
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1.Z) => #5
                SubscribeSubject FarClipHorizon
                -> PropertyMapping(Value) => #7
                #5, #7 -> Add(Operand=FloatProperty(Value=1000)) => #8
                SubscribeSubject SigmaZ
                -> PropertyMapping(Value) => #10
                #8, #10 -> Add(Operand=FloatProperty(Value=0)) => #11
                SubscribeSubject VisualCorridorLength
                -> PropertyMapping(Value) => #13
                #11, #13 -> Divide(Operand=FloatProperty(Value=120))
                -> InputMapping(TypeMapping=TypeMapping<System.Double>)
                -> Bonsai.Numerics.Floor
                -> WorkflowOutput
            #15, #16 -> Concat
            -> DistinctUntilChanged => #18
            SubscribeSubject VisualCorridorLength
            -> PropertyMapping(Value) => #20
            #18, #20 -> Multiply(Operand=DoubleProperty(Value=120)) => #21
            #18, #21 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Id,
                Item2 as Start
                )
            -> InputMapping(StartPosition(Selector=Start), Id(Selector=Id)) => #24
            SubscribeSubject VisualCorridorLength
            -> PropertyMapping(Length) => #26
            SubscribeSubject CorridorWidth
            -> PropertyMapping(Width(Selector=it)) => #28
            SubscribeSubject CorridorHeight
            -> PropertyMapping(Height) => #30
            SubscribeSubject TextureDefinition
            -> PropertyMapping(Textures) => #32
            #24, #26, #28, #30, #32 -> IncludeWorkflow(Path=Extensions\CreateCorridorSpecs.bonsai)
            -> ReplaySubject VisualCorridorSpecs(BufferSize=nil)

            SubscribeSubject VisualCorridorSpecs
            -> IncludeWorkflow(Path=Extensions\DrawSegment.bonsai)
            -> Merge
            -> WorkflowOutput

        GroupWorkflow PatchGeneration
            BehaviorSubject<AindVrForagingDataSchema.AindVrForagingTask.VirtualSite> SiteSpecs

            SubscribeSubject SiteSpecs
            -> GroupWorkflow InstantiateSite
                WorkflowInput Source1
                -> CreateObservable InstantiateSite
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject ThisSiteSpecs

                    SubscribeSubject CurrentPosition
                    -> MemberSelector(Selector=Value)
                    -> MemberSelector(Selector=Z) => #5
                    SubscribeSubject ThisSiteSpecs
                    -> MemberSelector(Selector=Start_position) => #7
                    SubscribeSubject ThisSiteSpecs
                    -> MemberSelector(Selector="Start_position,Length")
                    -> Add => #10
                    #5, #7, #10 -> CombineLatest
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (Item1 >= Item2) && (Item1 < Item3)
                    -> BehaviorSubject IsInSite

                    Defer SiteLogic => #14
                        GroupWorkflow RewardControl => #0
                            SubscribeSubject ThisSiteSpecs
                            -> MemberSelector(Selector=Reward)
                            -> Take(Count=1)
                            -> AsyncSubject ThisRewardControl

                            SubscribeSubject IsStopped
                            -> CreateObservable CheckStop
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=Operant_logic.Stop_duration)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: TimeSpan.FromSeconds(it)
                                -> PropertyMapping(DueTime)
                                -> Bonsai.Shaders.Timer(DueTime=PT0.0000001S) => #4
                                WorkflowInput Source1 => #5
                                #4, #5 -> WithLatestFrom
                                -> MemberSelector(Selector=Item2)
                                -> WorkflowOutput
                            -> Switch
                            -> Condition => #7
                                WorkflowInput Source1
                                -> MemberSelector(Selector=Value)
                                -> WorkflowOutput
                            Annotation LockedResponse(Text="") => #8
                            #7, #8 -> Take(Count=1)
                            -> SelectMany LockedChoiceFeedback => #10
                                WorkflowInput Source1
                                -> Unit
                                -> MulticastSubject ChoiceFeedback
                                -> BooleanProperty(Value=true)
                                -> MulticastSubject SpoutAvailable
                                -> Take(Count=1)
                                -> WorkflowOutput
                            -> Condition Operant
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=Operant_logic.Is_operant)
                                -> WorkflowOutput
                            -> SelectMany WaitDelay
                                SubscribeSubject CurrentPosition
                                -> Take(Count=1)
                                -> AsyncSubject EntryPosition

                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=Delay) => #4
                                SubscribeSubject RngSeed
                                -> PropertyMapping(RandomSource) => #6
                                #4, #6 -> AindVrForagingDataSchema.AindVrForagingTask.SampleDistribution => #7
                                SubscribeSubject RewardDelayOffset => #8
                                #7, #8 -> CombineLatest
                                -> Add
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: TimeSpan.FromSeconds(it)
                                -> PropertyMapping(DueTime)
                                -> Bonsai.Shaders.Timer(DueTime=PT0S)
                                -> BooleanProperty(Value=true) => #14
                                GroupWorkflow CheckDistanceFromEntry
                                    SubscribeSubject EntryPosition
                                    -> MemberSelector(Selector=Value)
                                    -> MemberSelector(Selector=Z) => #2
                                    SubscribeSubject CurrentPosition
                                    -> MemberSelector(Selector=Value)
                                    -> MemberSelector(Selector=Z) => #5
                                    #2, #5 -> CombineLatest
                                    -> Subtract
                                    -> Bonsai.Dsp.Abs => #8
                                    SubscribeSubject ThisRewardControl
                                    -> MemberSelector(Selector=OperantLogic.DistanceThresholdToBeStatic)
                                    -> PropertyMapping(Value) => #11
                                    #8, #11 -> GreaterThan(Operand=FloatProperty(Value=0)) => #12
                                    SubscribeSubject IsInSite
                                    -> BitwiseNot
                                    -> Condition
                                        WorkflowInput Source1
                                        -> WorkflowOutput
                                    -> BooleanProperty(Value=true) => #16
                                    #12, #16 -> Merge
                                    -> WorkflowOutput
                                -> Condition
                                    WorkflowInput Source1
                                    -> WorkflowOutput
                                -> BooleanProperty(Value=false) => #17
                                #14, #17 -> Merge
                                -> Take(Count=1) => #19
                                SubscribeSubject EntryPosition => #20
                                #19, #20 -> WithLatestFrom => #21
                                -> MemberSelector(Selector="Item1,Item2.Value.Z")
                                -> Bonsai.Scripting.Expressions.ExpressionTransform LabelOutcome => #23
                                  Expression:
                                    new(
                                    it.Item1 as IsSuccessfulWait,
                                    it.Item2 as EntryPosition)
                                #21 -> MemberSelector(Selector=Item2.Seconds) => #24
                                #23, #24 -> Zip
                                -> Bonsai.Harp.CreateTimestamped
                                -> IncludeWorkflow(Path=Extensions\SinkSoftwareEvent.bonsai, EventName=WaitRewardOutcome)
                                -> MemberSelector(Selector=Value)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            -> SelectMany WaitForLick => #13
                                WorkflowInput Source1
                                -> Take(Count=1)
                                -> AsyncSubject WaitDelayOutcome

                                SubscribeSubject WaitDelayOutcome
                                -> MemberSelector(Selector=IsSuccessfulWait)
                                -> Condition IsFalse
                                    WorkflowInput Source1
                                    -> BitwiseNot
                                    -> WorkflowOutput
                                -> BooleanProperty(Value=false) => #6
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=OperantLogic.TimeToCollect)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: TimeSpan.FromSeconds(it)
                                -> PropertyMapping(DueTime)
                                -> Bonsai.Shaders.Timer(DueTime=P11DT13H46M40S)
                                -> BooleanProperty(Value=false) => #12
                                GroupWorkflow CheckDistanceFromEntry
                                    SubscribeSubject WaitDelayOutcome
                                    -> MemberSelector(Selector=EntryPosition) => #1
                                    SubscribeSubject CurrentPosition
                                    -> MemberSelector(Selector=Value)
                                    -> MemberSelector(Selector=Z) => #4
                                    #1, #4 -> CombineLatest
                                    -> Subtract
                                    -> Bonsai.Dsp.Abs => #7
                                    SubscribeSubject ThisRewardControl
                                    -> MemberSelector(Selector=OperantLogic.DistanceThresholdToBeStatic)
                                    -> PropertyMapping(Value) => #10
                                    #7, #10 -> GreaterThan(Operand=FloatProperty(Value=0)) => #11
                                    SubscribeSubject IsInSite
                                    -> BitwiseNot
                                    -> Condition
                                        WorkflowInput Source1
                                        -> WorkflowOutput
                                    -> BooleanProperty(Value=true) => #15
                                    #11, #15 -> Merge
                                    -> WorkflowOutput
                                -> Bonsai.Shaders.SampleOnUpdateFrame
                                -> Condition
                                    WorkflowInput Source1
                                    -> WorkflowOutput
                                -> BooleanProperty(Value=false) => #16
                                SubscribeSubject LickEvent
                                -> Bonsai.Shaders.SampleOnUpdateFrame
                                -> BooleanProperty(Value=true) => #19
                                #6, #12, #16, #19 -> Merge
                                -> Take(Count=1)
                                -> IncludeWorkflow(Path=Extensions\SinkSoftwareEvent.bonsai, EventName=WaitLickOutcome)
                                -> Take(Count=1)
                                -> WorkflowOutput
                            -> Condition FailToCollect
                                WorkflowInput Source1
                                -> BitwiseNot
                                -> WorkflowOutput
                            -> BooleanProperty(Value=false)
                            -> MulticastSubject SpoutAvailable => #16
                            #13 -> Condition Success
                                WorkflowInput Source1
                                -> WorkflowOutput
                            -> Unit => #18
                            #10 -> Condition Pavlovian => #19
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=OperantLogic.IsOperant)
                                -> BitwiseNot
                                -> WorkflowOutput
                            SubscribeSubject ThisRewardControl
                            -> MemberSelector(Selector=Delay) => #21
                            SubscribeSubject RngSeed
                            -> PropertyMapping(RandomSource) => #23
                            #21, #23 -> AindVrForagingDataSchema.AindVrForagingTask.SampleDistribution => #24
                            SubscribeSubject RewardDelayOffset => #25
                            #24, #25 -> CombineLatest
                            -> Add
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: TimeSpan.FromSeconds(it)
                            -> PropertyMapping(DueTime) => #29
                            #19, #29 -> Bonsai.Shaders.Delay(DueTime=PT3S)
                            -> Unit => #31
                            #18, #31 -> Merge
                            -> Take(Count=1)
                            -> SelectMany DetermineReward
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=Probability) => #1
                                SubscribeSubject RngSeed
                                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                                -> Bonsai.Numerics.Distributions.Sample => #4
                                #1, #4 -> Zip => #5
                                -> GreaterThan => #6
                                #5, #6 -> Zip
                                -> Bonsai.Scripting.Expressions.ExpressionTransform CheckEdgeCase => #8
                                  Expression: Item1.Item1 == 1.0 ? True : (Item1.Item1 == 0.0 ? False : Item2)
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=Amount) => #10
                                #8, #10 -> Zip
                                -> Bonsai.Scripting.Expressions.ExpressionTransform CoinFlip => #12
                                  Expression: Item1 ? Item2 : 0
                                SubscribeSubject RewardAvailableInPatch => #13
                                #12, #13 -> Zip
                                -> Bonsai.Scripting.Expressions.ExpressionTransform CapRewardAvailable
                                  Expression: Item1 > Item2 ? Item2 : Item1
                                -> Take(Count=1)
                                -> WorkflowOutput
                            -> MulticastSubject GiveReward
                            -> BooleanProperty(Value=true) => #36
                            #16, #36 -> Merge
                            -> Take(Count=1)
                            -> WorkflowOutput
                        SubscribeSubject ThisSiteSpecs
                        -> MemberSelector(Selector=Reward)
                        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai)
                        -> Take(Count=1) => #4
                        #0, #4 -> SubscribeWhen

                        GroupWorkflow OdorControl => #6
                            Annotation OdorControl(Text="")
                            -> SubscribeSubject IsInSite
                            -> DistinctUntilChanged
                            -> MulticastSubject OdorEndValveState
                            -> WorkflowOutput
                        SubscribeSubject ThisSiteSpecs
                        -> MemberSelector(Selector=Odor)
                        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai)
                        -> Take(Count=1) => #10
                        #6, #10 -> SubscribeWhen

                        SubscribeSubject ThisSiteSpecs
                        -> MemberSelector(Selector=Render.Contrast)
                        -> Condition
                            WorkflowInput Source1
                            -> MemberSelector(Selector=HasValue)
                            -> WorkflowOutput
                        -> MemberSelector(Selector=Value)
                        -> MulticastSubject ScreenContrast
                    SubscribeSubject IsInSite
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=Extensions\ActiveSiteEvent.bonsai)
                    -> Take(Count=1) => #18
                    #14, #18 -> SubscribeWhen => #19
                    GroupWorkflow DisposeSite => #20
                        SubscribeSubject CurrentPosition
                        -> MemberSelector(Selector=Value)
                        -> MemberSelector(Selector=Z) => #2
                        SubscribeSubject DisposingTreshold => #3
                        SubscribeSubject ThisSiteSpecs
                        -> MemberSelector(Selector="Length,StartPosition")
                        -> Add => #6
                        #3, #6 -> CombineLatest
                        -> Add => #8
                        #2, #8 -> CombineLatest
                        -> GreaterThan
                        -> Condition
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #19, #20 -> TakeUntil
                    -> LastOrDefault => #22
                    SubscribeSubject ThisSiteSpecs => #23
                    #22, #23 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> Merge

            SubscribeSubject SiteSpecs
            -> IncludeWorkflow(Path=Extensions\InstantiateSite.bonsai)
            -> Merge

        SubscribeSubject ActiveSite
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ActiveSite)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject VisualCorridorSpecs
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=VisualCorridorSpecs)
        -> MulticastSubject SoftwareEvent

    Annotation(Text="")
    -> Defer Foraging => #3
        Bonsai.Shaders.Timer(DueTime=PT0S)
        -> Take(Count=1) => #1
        SubscribeSubject ActivePatch
        -> MemberSelector(Selector=VirtualSiteGeneration.InterPatchSite)
        -> MemberSelector(Selector=LengthDistribution)
        -> PropertyMapping(LengthDistribution) => #5
        SubscribeSubject ActivePatch
        -> MemberSelector(Selector=VirtualSiteGeneration.InterPatchSite)
        -> MemberSelector(Selector=Label)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.ToString()
        -> PropertyMapping(Label(Selector=it)) => #10
        SubscribeSubject ActivePatch
        -> MemberSelector(Selector=VirtualSiteGeneration.InterPatchSite)
        -> MemberSelector(Selector=Contrast)
        -> PropertyMapping(Contrast) => #14
        #1, #5, #10, #14 -> IncludeWorkflow(Path=Extensions\AddInterPatchSite.bonsai, Label=InterPatchSite, LengthDistribution=nil)
        -> SelectMany Patch
            WorkflowInput Source1
            -> Take(Count=1)
            -> BehaviorSubject EntrySite

            BooleanProperty(Value=false)
            -> Take(Count=1)
            -> BehaviorSubject HasRefusedLastReward

            SubscribeSubject ChoiceFeedback
            -> BooleanProperty(Value=false)
            -> MulticastSubject HasRefusedLastReward

            SubscribeSubject EntrySite
            -> Take(Count=1) => #10
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.GapSite)
            -> MemberSelector(Selector=LengthDistribution)
            -> PropertyMapping(LengthDistribution) => #14
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.GapSite)
            -> MemberSelector(Selector=Label)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.ToString()
            -> PropertyMapping(Label(Selector=it)) => #19
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.GapSite)
            -> MemberSelector(Selector=Contrast)
            -> PropertyMapping(Contrast) => #23
            #10, #14, #19, #23 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai, Label=GapSite, LengthDistribution=nil)
            -> BehaviorSubject FirstPatchSite

            SubscribeSubject FirstPatchSite
            -> Take(Count=1)
            -> Condition NotHasRefusedLast
                WorkflowInput Source1 => #0
                SubscribeSubject HasRefusedLastReward => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany ResetHasRefusedLast => #29
                BooleanProperty(Value=true)
                -> MulticastSubject HasRefusedLastReward
                -> Take(Count=1) => #2
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.RewardSite)
            -> MemberSelector(Selector=LengthDistribution)
            -> PropertyMapping(LengthDistribution) => #33
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.RewardSite)
            -> MemberSelector(Selector=Label)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.ToString()
            -> PropertyMapping(Label(Selector=it)) => #38
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.RewardSite)
            -> MemberSelector(Selector=Contrast)
            -> PropertyMapping(Contrast) => #42
            #29, #33, #38, #42 -> IncludeWorkflow(Path=Extensions\AddRewardSite.bonsai, Label=RewardSite, LengthDistribution=nil) => #43
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.GapSite)
            -> MemberSelector(Selector=LengthDistribution)
            -> PropertyMapping(LengthDistribution) => #47
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.GapSite)
            -> MemberSelector(Selector=Label)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.ToString()
            -> PropertyMapping(Label(Selector=it)) => #52
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.GapSite)
            -> MemberSelector(Selector=Contrast)
            -> PropertyMapping(Contrast) => #56
            #43, #47, #52, #56 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai, Label=GapSite, LengthDistribution=nil)
            -> SelectMany WaitForSiteOutcome
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject PreviousSite

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Z) => #5
                SubscribeSubject PreviousSite
                -> MemberSelector(Selector="Length,StartPosition")
                -> Add => #8
                #5, #8 -> CombineLatest
                -> GreaterThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #12
                SubscribeSubject PreviousSite => #13
                #12, #13 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> MulticastSubject FirstPatchSite
            -> Take(Count=1)
            -> Repeat
            -> Condition HasExited
                SubscribeSubject HasRefusedLastReward
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\UpdateState.bonsai)
        -> Repeat
    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=OperationControl.TaskStage)
    -> Condition IsForaging => #6
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.AindVrForagingTask.TaskStage>(Value=""))
        -> WorkflowOutput
    #3, #6 -> SubscribeWhen

    Defer Habituation => #8
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=OperationControl.HabituationSettings)
        -> Take(Count=1)
        -> AsyncSubject HabituationSettings

        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=DistanceToReward)
        -> MulticastSubject DistanceToRewardAvailable

        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=RewardSpecifications.OperantLogic)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai)
        -> MemberSelector(Selector=IsOperant)
        -> MulticastSubject IsOperantMode

        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=Contrast)
        -> Condition HasValue?
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MulticastSubject ScreenContrast

        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=RewardSpecifications.Amount)
        -> BehaviorSubject RewardAmount

        GroupWorkflow SoftwareEventLogging
            SubscribeSubject DistanceToRewardAvailable
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=DistanceToRewardAvailable)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject IsOperantMode
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=IsOperantMode)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject ScreenContrast
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ScreenBrightness)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject RewardAmount
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=RewardAmount)
            -> MulticastSubject SoftwareEvent

        Bonsai.Shaders.Timer(DueTime=PT0S) => #20
        SubscribeSubject DistanceToRewardAvailable
        -> Take(Count=1) => #22
        SubscribeSubject RngSeed
        -> PropertyMapping(RandomSource) => #24
        #22, #24 -> AindVrForagingDataSchema.AindVrForagingTask.SampleDistribution
        -> PropertyMapping(DistanceToRewardAvailable) => #26
        #20, #26 -> SelectMany RunToReward => #27
            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector=Value.Z)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Accumulate => #3
            ExternalizedMapping(Value(DisplayName=DistanceToRewardAvailable)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=TaskLogic_RewardAvailable)
            -> MulticastSubject SoftwareEvent
            -> WorkflowOutput

            SubscribeSubject CurrentPosition
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Z)
            -> PropertyMapping(StartPosition)
            -> AindVrForagingDataSchema.AindVrForagingTask.VirtualSite(Id=0, Label=virtualSite, Length=20, Start_position=0)
            -> MulticastSubject ActiveSite
        SubscribeSubject HabituationRewardAmount
        -> Take(Count=1)
        -> PropertyMapping(RewardAmount) => #30
        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=RewardSpecifications.Probability)
        -> PropertyMapping(RewardProbability) => #33
        #27, #30, #33 -> SelectMany Reward
            SubscribeSubject IsOperantMode
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> SelectMany WaitForLick
                SubscribeSubject LickEvent
                -> Take(Count=1)
                -> WorkflowOutput
            -> Unit => #4
            SubscribeSubject IsOperantMode
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit => #8
            #4, #8 -> Merge => #9
            ExternalizedMapping(Value(DisplayName=RewardAmount)) => #10
            #9, #10 -> DoubleProperty(Value=0) => #11
            ExternalizedMapping(Value(DisplayName=RewardProbability)) => #12
            #11, #12 -> SelectMany DetermineReward
                SubscribeSubject RngSeed
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                ExternalizedMapping(Value) => #3
                #2, #3 -> GreaterThan(Operand=DoubleProperty(Value=0)) => #4
                WorkflowInput Source1 => #5
                #4, #5 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 ? Item2 : 0
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject GiveReward
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=TaskLogic_RewardDelivery)
            -> MulticastSubject SoftwareEvent
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject CurrentPosition
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Z)
            -> PropertyMapping(StartPosition)
            -> AindVrForagingDataSchema.AindVrForagingTask.VirtualSite(Id=0, Label=virtualSite, Length=20, Start_position=0)
            -> MulticastSubject ActiveSite
        -> Repeat
    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=OperationControl.TaskStage)
    -> Condition IsHabituation => #11
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.AindVrForagingTask.TaskStage>(Value=""))
        -> WorkflowOutput
    #8, #11 -> SubscribeWhen
SubscribeSubject EndExperiment => #46
#45, #46 -> TakeUntil => #47
SubscribeSubject StartExperiment => #48
#47, #48 -> SubscribeWhen

Disable GroupWorkflow DebugTools
    GroupWorkflow RenderStateQuad
        SubscribeSubject PostDrawing
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #2
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=InterPatchSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label) => #8
        -> Equal(Operand=StringProperty(Value=GapSite)) => #9
        #8 -> Equal(Operand=StringProperty(Value=InitialGapSite)) => #10
        #9, #10 -> Zip
        -> BitwiseOr
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=RewardSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
          Expression: it ? 255 : 0
        #6, #13, #17 -> Zip
        -> PropertyMapping(ColorR(Selector=Item1), ColorG(Selector=Item2), ColorB(Selector=Item3)) => #19
        #2, #19 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=0.9
          LocationY=0.9
          Layer=100
          Angle=0
          ColorR=0
          ColorG=255
          ColorB=0
          ColorA=1
        -> WorkflowOutput

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TextureBank => #1
    #0, #1 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #5
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #6
    #5, #6 -> Bonsai.Shaders.Delay(DueTime=PT2S)
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

GroupWorkflow UserInterface
    GroupWorkflow Shortcuts
        Bonsai.Shaders.Input.KeyDown(Key=Keypad7, Modifiers=Control)
        -> BooleanProperty(Value=true) => #1
        Bonsai.Shaders.Input.KeyDown(Key=Keypad8, Modifiers=Control)
        -> BooleanProperty(Value=false) => #3
        #1, #3 -> Merge
        -> MulticastSubject SpoutAvailable

        Bonsai.Shaders.Input.KeyDown(Key=KeypadSubtract, Modifiers=Control)
        -> Unit
        -> MulticastSubject EndExperiment

    GroupWorkflow QC
        SubscribeSubject HarpBehaviorHeartBeat => #0
        SubscribeSubject ExperimentStatus => #1
        SubscribeSubject AverageScreenFps => #2
        SubscribeSubject MainCameraDroppedFrames => #3
        SubscribeSubject SessionAccumulatedReward => #4
        #1, #2, #3, #4 -> CombineLatest => #5
        #0, #5 -> WithLatestFrom
        -> MemberSelector(Selector="Item1.Seconds,Item2.Item1,Item2.Item2,Item2.Item3,Item2.Item4")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as Heartbeat,
            Item2 as ExperimentStatus,
            Item3 as AverageScreenFps,
            Item4 as DroppedFrames,
            Item5 as TotalReward)
        -> WorkflowOutput

        SubscribeSubject FaceCameraFrameEvent
        -> MemberSelector(Selector=Value.ChunkData.FrameID)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Subtract(Operand=DoubleProperty(Value=1))
        -> Accumulate
        -> Add(Operand=DoubleProperty(Value=1))
        -> BehaviorSubject MainCameraDroppedFrames

        StringProperty(Value=PreExperiment)
        -> Take(Count=1) => #18
        SubscribeSubject StartExperiment
        -> StringProperty(Value=Running) => #20
        SubscribeSubject EndExperiment
        -> StringProperty(Value=Closed) => #22
        #18, #20, #22 -> Merge
        -> BehaviorSubject ExperimentStatus

        Bonsai.Shaders.RenderFrame
        -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
        -> Bonsai.Dsp.Buffer(Count=60, Skip=30)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
          Expression: 1.0 / it
        -> IntProperty(Value=2) => #31
        #30, #31 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Round
          Expression: Math.Round(Item1, Item2)
        -> BehaviorSubject AverageScreenFps
    -> BehaviorSubject QCDiagnosis

    ExternalizedMapping(Is_truncated, Min, Max, Scale, Offset, HabituationRewardAmount, IsOperantMode, Rate)
    -> GroupWorkflow HabituationSettings
        ExternalizedMapping(Rate)
        -> AindVrForagingDataSchema.AindVrForagingTask.ExponentialDistributionParameters(Rate=0)
        -> PropertyMapping(Distribution_parameters) => #2
        ExternalizedMapping(Is_truncated, Min, Max)
        -> AindVrForagingDataSchema.AindVrForagingTask.TruncationParameters(Is_truncated=false, Min=0, Max=0)
        -> PropertyMapping(Truncation_parameters) => #5
        ExternalizedMapping(Scale, Offset)
        -> AindVrForagingDataSchema.AindVrForagingTask.ScalingParameters(Scale=1, Offset=0)
        -> PropertyMapping(Scaling_parameters) => #8
        #2, #5, #8 -> AindVrForagingDataSchema.AindVrForagingTask.ExponentialDistribution
        -> BehaviorSubject DistanceToRewardAvailable

        ExternalizedMapping(Value(DisplayName=HabituationRewardAmount, Category=HabituationSettings))
        -> DoubleProperty(Value=0)
        -> Skip(Count=1)
        -> BehaviorSubject HabituationRewardAmount

        ExternalizedMapping(Value(DisplayName=IsOperantMode, Category=HabituationSettings))
        -> BooleanProperty(Value=false)
        -> Skip(Count=1)
        -> BehaviorSubject IsOperantMode

GroupWorkflow Visualizer
    GroupWorkflow LauncherControl
        AllenNeuralDynamics.Core.Design.ToggleButton(CheckedLabel=Running..., UncheckedLabel="Start session.", IsInitiallyChecked=false) => #0
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject StartExperimentShortcut
        AllenNeuralDynamics.Core.Design.AnnotationSource => #5
        -> ReplaySubject UserComments(BufferSize=nil)
        #5 -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.AnnotationSourceVisualizer>) => #7
        #0 -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.ToggleButtonVisualizer>) => #8
        AllenNeuralDynamics.Core.Design.PushButton(Label="End experiment") => #9
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #10
        #7, #8, #10 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder LauncherControl
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput
        #9 -> Take(Count=1)
        -> MulticastSubject EndExperiment => #14
        SubscribeSubject StartExperiment => #15
        #14, #15 -> SubscribeWhen

    GroupWorkflow OperationControl
        SubscribeSubject LickometerTriggerThreshold => #0
        SubscribeSubject LickometerUntriggerThreshold => #1
        #0, #1 -> CombineLatest
        -> Format(Format="TriggeredThr: {0} ; UntriggeredThr: {1}", Selector="Item1,Item2")
        -> VisualizerMapping => #4
        AllenNeuralDynamics.Core.Design.PushButton(Label=+Trigger)
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #6
        AllenNeuralDynamics.Core.Design.PushButton(Label=-Trigger)
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #8
        AllenNeuralDynamics.Core.Design.PushButton(Label=+Untrigger)
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #10
        AllenNeuralDynamics.Core.Design.PushButton(Label=-Untrigger)
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #12
        #4, #6, #8, #10, #12 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder LickometerControl
          ColumnCount=2
          RowCount=3
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=2, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> WorkflowOutput
        #6 -> BooleanProperty(Value=true) => #15
        #8 -> BooleanProperty(Value=false) => #16
        #15, #16 -> Merge
        -> MulticastSubject IncrementLickometerTrigger
        #10 -> BooleanProperty(Value=true) => #19
        #12 -> BooleanProperty(Value=false) => #20
        #19, #20 -> Merge
        -> MulticastSubject IncrementLickometerUntrigger

    GroupWorkflow Updaters
        SubscribeSubject StopDurationOffset
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #1
        SubscribeSubject StopVelocityThreshold
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #3
        SubscribeSubject RewardDelayOffset
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #5
        #1, #3, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder Updaters(ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow HwTestGui => #3
        GroupWorkflow ValveGui
            AllenNeuralDynamics.Core.Design.PropertyGridSource
            -> VisualizerMapping(VisualizerType=TypeMapping<PropertyGridVisualizer>) => #1
            AllenNeuralDynamics.Core.Design.PushButton(Label=Calibrate) => #2
            -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>) => #3
            AllenNeuralDynamics.Core.Design.ToggleButton(CheckedLabel=CloseValves, UncheckedLabel=OpenValves, IsInitiallyChecked=false) => #4
            -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.ToggleButtonVisualizer>) => #5
            #1, #3, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ValveCalibration
              ColumnCount=2
              RowCount=2
              ColumnStyles=""
              RowStyles=""
              CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
            -> WorkflowOutput
            #4 -> MulticastSubject ValveFlushState
            #2 -> Take(Count=1) => #9
            ExternalizedMapping(Interval(Category=ValveCalibration), OpeningTimeMs(Category=ValveCalibration), Repeats(Category=ValveCalibration)) => #10
            #9, #10 -> SelectMany LoopValve
                ExternalizedMapping(DueTime(DisplayName=Interval))
                -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #1
                ExternalizedMapping(Value(DisplayName=OpeningTimeMs)) => #2
                #1, #2 -> IntProperty(Value=100)
                -> MulticastSubject ValveOpenTimeMs
                -> Unit
                -> MulticastSubject TriggerValve => #6
                ExternalizedMapping(Count(DisplayName=Repeats)) => #7
                #6, #7 -> RepeatCount(Count=200) => #8
                Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Shift) => #9
                #8, #9 -> TakeUntil
                -> ElementIndex
                -> MemberSelector(Selector=Index)
                -> WorkflowOutput
            -> Repeat

            BehaviorSubject<System.Boolean> ValveFlushState
            -> CreateObservable Flush
                WorkflowInput Source1
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IntProperty(Value=200)
                -> MulticastSubject ValveOpenTimeMs
                -> Unit
                -> MulticastSubject TriggerValve
                -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
                -> RepeatCount(Count=20)
                -> LastOrDefault
                -> WorkflowOutput
            -> Switch
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #1
        GroupWorkflow HwShortcuts
            AllenNeuralDynamics.Core.Design.PushButton(Label=TriggerAudio) => #0
            -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.PushButtonVisualizer>)
            -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=5, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput
            #0 -> MulticastSubject AudioTrigger
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #3
        #1, #3 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PreSessionGui
          ColumnCount=1
          RowCount=2
          ColumnStyles(ColumnStyle(SizeType=Percent, Width=0.25))
          RowStyles(RowStyle(SizeType=Percent, Height=0.8), RowStyle(SizeType=Percent, Height=0.2))
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput
    SubscribeSubject StartExperimentShortcut => #4
    #3, #4 -> TakeUntil

    SubscribeSubject FaceCameraFrameEvent
    -> MemberSelector(Selector=Value.Image)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #8
    SubscribeSubject AuxiliaryCamera0
    -> MemberSelector(Selector=Value)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #11
    SubscribeSubject AuxiliaryCamera1
    -> MemberSelector(Selector=Value)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #14
    #8, #11, #14 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #16
    SubscribeSubject QCDiagnosis
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #18
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #22
      Expression: TimeSpan.FromSeconds(it)
    SubscribeSubject StartExperiment => #23
    #22, #23 -> SubscribeWhen
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #25
    SubscribeSubject LickEvent => #26
    -> IntProperty(Value=1) => #27
    #27, #26 -> Zip
    -> Bonsai.Design.Visualizers.LineGraphBuilder(ValueSelector="Item2,Item1", SymbolType=Diamond, LineWidth=0, Capacity=20, XMin=nil, XMax=nil, YMin=0, YMax=2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.LineGraphVisualizer>) => #30
    SubscribeSubject CurrentVelocity
    -> Bonsai.Shaders.SampleOnRenderFrame => #32
    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=Operation_control.Position_control.Velocity_threshold) => #34
    #32, #34 -> CombineLatest
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector="Item1,Item2", SymbolType=None, LineWidth=2, Capacity=2000, Min=nil, Max=nil)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #37
    GroupWorkflow ForagingStage => #38
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, EventFilter=InterPatch, Value=1) => #0
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, EventFilter=Gap, Value=2) => #1
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, EventFilter=Reward, Value=3) => #2
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, EventFilter=Unspecified, Value=-1) => #3
        #0, #1, #2, #3 -> Merge
        -> WorkflowOutput
    GroupWorkflow HabituationStage => #39
        IncludeWorkflow(Path=Extensions\CheckHabituationStageLabel.bonsai, Label=RunToReward, Value=1) => #0
        IncludeWorkflow(Path=Extensions\CheckHabituationStageLabel.bonsai, Label=RewardAvailable, Value=2) => #1
        #0, #1 -> Merge
        -> WorkflowOutput
    #38, #39 -> Merge => #40
    -> Skip(Count=1) => #41
    #41, #40 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #43
      Expression: new(Item1 as Present, Item2 as Past)
    -> MemberSelector(Selector="Past.Item1,Present.Item2") => #44
    #43 -> MemberSelector(Selector=Present) => #45
    #44, #45 -> Merge
    -> Bonsai.Design.Visualizers.LineGraphBuilder(ValueSelector="Item2.Start_position,Item1", SymbolType=Diamond, LineWidth=3, Capacity=30, XMin=nil, XMax=nil, YMin=-1, YMax=4)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.LineGraphVisualizer>) => #48
    SubscribeSubject ActivePatch
    -> MemberSelector(Selector=State_index) => #50
    SubscribeSubject CurrentPosition
    -> MemberSelector(Selector=Value)
    -> MemberSelector(Selector=Z) => #53
    #50, #53 -> WithLatestFrom
    -> Bonsai.Design.Visualizers.LineGraphBuilder(ValueSelector="Item2,Item1", SymbolType=Triangle, LineWidth=3, Capacity=6, XMin=nil, XMax=nil, YMin=-1, YMax=2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.LineGraphVisualizer>) => #56
    SubscribeSubject ThermistorData
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector=Value, SymbolType=None, LineWidth=2, Capacity=2000, Min=nil, Max=nil)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #59
    SubscribeSubject LickometerTriggerThreshold => #60
    SubscribeSubject LickometerUntriggerThreshold => #61
    #60, #61 -> CombineLatest
    -> Format(Format="TriggerTreshold:{0} UntriggerThreshold:{1}", Selector="Item1,Item2")
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #64
    #18, #25, #30, #37, #48, #56, #59, #64 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
      ColumnCount=4
      RowCount=4
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #66
    #16, #66 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder Visualization(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

GroupWorkflow CalibrationTools

SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    CreateOdorMix
      channel3AsCarrier=true
      PercentageChannel0=0
      PercentageChannel1=0
      PercentageChannel2=0
      PercentageChannel3=NaN
      Channel3AsCarrier=true
      TargetOdorFlow=100
      TotalFlow=1000
    -> Take(Count=1) => #1
    -> MemberSelector(Selector=ChannelsTargetFlow) => #2
    #1 -> MemberSelector(Selector=OdorValveState) => #3
    #2, #3 -> Merge
    -> MulticastSubject HarpOlfactometerCommands
    -> Last
    -> BooleanProperty(Value=false)
    -> MulticastSubject OdorEndValveState
    -> WorkflowOutput

    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Source) => #11
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=Metadata)
    -> MemberSelector(Selector=RemoteDataPath)
    -> Condition NotNull
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.StripDirectoryPath => #16
    SubscribeSubject CompoundRootPath
    -> MemberSelector(Selector=SessionPath) => #18
    #16, #18 -> Zip
    -> Format(Format={0}/{1}, Selector="Item1, Item2")
    -> PropertyMapping(Destination) => #21
    #11, #21 -> AllenNeuralDynamics.Core.StartRobocopy(CreateLog=true, Arguments="/E /DCOPY:DAT /R:100 /W:3 /tee", ProcessWindowStyle=Normal) => #22
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=Metadata)
    -> MemberSelector(Selector=RemoteDataPath)
    -> Condition NotNull => #26
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    #22, #26 -> SubscribeWhen
-> Bonsai.Shaders.Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
